<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:OpenEphys.Miniscope;assembly=OpenEphys.Miniscope"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:ffmpeg="clr-namespace:Bonsai.FFmpeg;assembly=Bonsai.FFmpeg"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p1:UclaMiniscopeV4">
            <p1:Index>1</p1:Index>
            <p1:LedBrightness>29.1</p1:LedBrightness>
            <p1:Focus>2.3</p1:Focus>
            <p1:SensorGain>Low</p1:SensorGain>
            <p1:FramesPerSecond>Fps30</p1:FramesPerSecond>
            <p1:LedRespectsTrigger>false</p1:LedRespectsTrigger>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>FrameNumber,Trigger,Quaternion</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>minicam-aux_.csv</io:FileName>
          <io:Delimiter>,</io:Delimiter>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
          <io:Selector>Timestamp,Value.Item1,Value.Item2,Value.Item3.W,Value.Item3.X,Value.Item3.Y,Value.Item3.Z</io:Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Quaternion</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
          <Selector>Image</Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ffmpeg:VideoWriter">
            <ffmpeg:FileName>minicam_.avi</ffmpeg:FileName>
            <ffmpeg:Suffix>Timestamp</ffmpeg:Suffix>
            <ffmpeg:Overwrite>false</ffmpeg:Overwrite>
            <ffmpeg:FrameRate>30</ffmpeg:FrameRate>
            <ffmpeg:OutputArguments>-s 1204x768 -c:v ffv1</ffmpeg:OutputArguments>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="vid:VideoCaptureDevice">
            <vid:Index>0</vid:Index>
            <vid:Format>
              <vid:FrameSize>
                <vid:Width>2560</vid:Width>
                <vid:Height>1440</vid:Height>
              </vid:FrameSize>
              <vid:AverageFrameRate>30</vid:AverageFrameRate>
              <vid:MaximumFrameRate>30</vid:MaximumFrameRate>
              <vid:BitCount>24</vid:BitCount>
            </vid:Format>
            <vid:CaptureProperties />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Timestamp" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="io:CsvWriter">
          <io:FileName>behavior_time.csv</io:FileName>
          <io:Append>false</io:Append>
          <io:Overwrite>false</io:Overwrite>
          <io:Suffix>Timestamp</io:Suffix>
          <io:IncludeHeader>false</io:IncludeHeader>
          <io:Selector>Timestamp</io:Selector>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="ffmpeg:VideoWriter">
            <ffmpeg:FileName>behavior_.avi</ffmpeg:FileName>
            <ffmpeg:Suffix>Timestamp</ffmpeg:Suffix>
            <ffmpeg:Overwrite>false</ffmpeg:Overwrite>
            <ffmpeg:FrameRate>30</ffmpeg:FrameRate>
            <ffmpeg:OutputArguments>-s 2560x1440 -c:v libx264 -b:v 25M -maxrate 30M -bufsize 50M</ffmpeg:OutputArguments>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="port:SerialReadLine">
          <port:PortName>COM7</port:PortName>
          <port:NewLine />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timestamp" />
      </Expression>
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>arduino_input.csv</io:FileName>
        <io:Delimiter>,</io:Delimiter>
        <io:ListSeparator />
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>Timestamp</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
        <io:Selector />
      </Expression>
      <Expression xsi:type="Parse">
        <Pattern> %f %f %f %f </Pattern>
        <Separator />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Retry" />
      </Expression>
      <Expression xsi:type="viz:RollingGraphBuilder">
        <viz:IndexSelector />
        <viz:ValueSelector>Item1,Item2,Item3,Item4</viz:ValueSelector>
        <viz:SymbolType>None</viz:SymbolType>
        <viz:LineWidth>1</viz:LineWidth>
        <viz:Capacity xsi:nil="true" />
        <viz:Min>0</viz:Min>
        <viz:Max>1.5</viz:Max>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>0</vid:Index>
          <vid:Format>
            <vid:FrameSize>
              <vid:Width>2560</vid:Width>
              <vid:Height>1440</vid:Height>
            </vid:FrameSize>
            <vid:AverageFrameRate>30</vid:AverageFrameRate>
            <vid:MaximumFrameRate>30</vid:MaximumFrameRate>
            <vid:BitCount>24</vid:BitCount>
          </vid:Format>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="0" To="5" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="7" To="10" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="11" To="14" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>